CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:28
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder sub-folder|Desktop
    Name of the file:test.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

EnhanceOrSuppressFeatures:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the operation:Enhance
    Feature size:45
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:15
    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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    Size of adaptive window:50
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    Thresholding method:Otsu

Opening:[module_num:4|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
    Select the input image:OrigAGP
    Name the output image:Opening_AGP
    Structuring element:disk,40

Opening:[module_num:5|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
    Select the input image:OrigMito
    Name the output image:Opening_Mito
    Structuring element:disk,40

Opening:[module_num:6|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
    Select the input image:OrigRNA
    Name the output image:Opening_RNA
    Structuring element:disk,40

Opening:[module_num:7|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
    Select the input image:OrigER
    Name the output image:Opening_ER
    Structuring element:disk,40

ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:AGP
    Image or measurement?:Image
    Select the first image:OrigAGP
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Opening_AGP
    Multiply the second image by:1.0
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
ImageMath:[module_num:9|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Mito
    Image or measurement?:Image
    Select the first image:OrigMito
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Opening_Mito
    Multiply the second image by:1.0
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
ImageMath:[module_num:10|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ER
    Image or measurement?:Image
    Select the first image:OrigER
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Opening_ER
    Multiply the second image by:1.0
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
ImageMath:[module_num:11|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:RNA
    Image or measurement?:Image
    Select the first image:OrigRNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Opening_RNA
    Multiply the second image by:1.0
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
IdentifySecondaryObjects:[module_num:12|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:AGP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyTertiaryObjects:[module_num:13|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:14|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
    Hidden:5
    Hidden:3
    Select an image to measure:DNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select an image to measure:ER
    Select an image to measure:RNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Nuclei
    Select an object to measure:Cytoplasm
    Select an object to measure:Cells
    Run all metrics?:Yes
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
MeasureGranularity:[module_num:15|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
    Image count:5
    Object count:1
    Select an image to measure:DNA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Object count:2
    Select an image to measure:AGP
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:2
    Select an image to measure:Mito
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:2
    Select an image to measure:ER
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Object count:2
    Select an image to measure:RNA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:16|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
    Hidden:5
    Select an image to measure:DNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select an image to measure:ER
    Select an image to measure:RNA
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:Cells

MeasureObjectNeighbors:[module_num:17|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:18|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:19|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:20|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
    Hidden:5
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:DNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select an image to measure:ER
    Select an image to measure:RNA
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:10
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
MeasureObjectSizeShape:[module_num:21|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
    Select objects to measure:Cells
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Calculate the Zernike features?:No

MeasureTexture:[module_num:22|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
    Hidden:5
    Hidden:3
    Hidden:1
    Select an image to measure:DNA
    Select an image to measure:AGP
    Select an image to measure:Mito
    Select an image to measure:ER
    Select an image to measure:RNA
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:Cells
    Texture scale to measure:3
    Measure images or objects?:Both

GrayToColor:[module_num:23|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
    Select a color scheme:RGB
    Select the image to be colored red:AGP
    Select the image to be colored green:DNA
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    Name the output image:ColorImage
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:Overlayoutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#F8FFFC
    Select objects to display:Nuclei
    Select outline color:#E8D700
    Select objects to display:Cells

OverlayOutlines:[module_num:25|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:outlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:green
    Select objects to display:Nuclei
    Select outline color:#FB0014
    Select objects to display:Cells

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:Overlayoutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_\g<Well>_s\g<Site>_overlay
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    Saved file format:png
    Output file location:Default Output Folder|work/projects/2019_05_28_Neuronal_Cell_Painting/NCP_PILOT_1/Overlays
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:outlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_\g<Well>_s\g<Site>_nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder|work/projects/2019_05_28_Neuronal_Cell_Painting/NCP_PILOT_1/Overlays
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|work/projects/2019_05_28_Neuronal_Cell_Painting/Results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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