CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:43
HasImagePlaneDetails:False

LoadData:[module_num:1|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notes:['Grouped by :Plate, Well, Site (grouped by metadata)', '**Make sure to group them again']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
    Input data file location:Default Input Folder sub-folder|Desktop\load_data_csv\NCP_PILOT_3B\MAtt_ICC_test
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:None|Documents/Projects/Nuron_IonChannel/Images/images/JUANCHI_PILOT_1_PLATE_1/Images
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:PreDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigMAP2
    Name the output image:PreMAP2
    Select the illumination function:IllumMAP2
    Select how the illumination function is applied:Divide
    Select the input image:OrigSynapse
    Name the output image:PreSynapse
    Select the illumination function:IllumSynapse
    Select how the illumination function is applied:Divide

ImageMath:[module_num:3|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DNA
    Image or measurement?:Image
    Select the first image:PreDNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:4|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:MAP2
    Image or measurement?:Image
    Select the first image:PreMAP2
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:5|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
    Operation:None
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:Synapse
    Image or measurement?:Image
    Select the first image:PreSynapse
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
EnhanceOrSuppressFeatures:[module_num:6|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notes:['Enhancing the DNA first helps remove out of focus blur (from glial nuclei maybe?)']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
    Select the input image:DNA
    Name the output image:EnhancedDNA
    Select the operation:Enhance
    Feature size:50
    Feature type:Speckles
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    Speed and accuracy:Fast

IdentifyPrimaryObjects:[module_num:7|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notes:['Identify nuclei.', '', '0.05-0.07 vs 0.2']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
    Select the input image:EnhancedDNA
    Name the primary objects to be identified:PrelimNuclei
    Typical diameter of objects, in pixel units (Min,Max):15,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:12
    Suppress local maxima that are closer than this minimum allowed distance:12
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:PrelimNuclei
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:9|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
    Hidden:1
    Select an image to measure:MAP2
    Select objects to measure:PrelimNuclei

FilterObjects:[module_num:10|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
    Select the objects to filter:PrelimNuclei
    Name the output objects:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Select the measurement to filter by:Intensity_MeanIntensity_MAP2
    Filter using a minimum measurement value?:Yes
    Minimum value:0.4
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:500
    Filter using a maximum measurement value?:No
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
EnhanceOrSuppressFeatures:[module_num:11|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notes:['This enhances the brightness of the neurites in the ER channel, which helps us retain them after background subtraction']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
    Select the input image:MAP2
    Name the output image:EnhancedNeurites
    Select the operation:Enhance
    Feature size:3
    Feature type:Neurites
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    Smoothing scale:2
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    Enhancement method:Tubeness
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
ImageMath:[module_num:12|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notes:['Subtract Neurites from MAP2 to get the cell body']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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:MAP2
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EnhancedNeurites
    Multiply the second image by:5
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
IdentifySecondaryObjects:[module_num:13|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notes:['Expand out the cell bodies around the nucleus.  We’ll go no further than 30 pixels, and only into areas with a high enough threshold.']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
    Select the input objects:Nuclei
    Name the objects to be identified:CellBodies
    Select the method to identify the secondary objects:Distance - B
    Select the input image:ImageAfterMath
    Number of pixels by which to expand the primary objects:30
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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
IdentifySecondaryObjects:[module_num:14|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notes:['Finally, we’ll propagate out the neurites from the cell bodies to create a “CellBodiesPlusNeurites” object set.', '', '0.2 seems to be high when lots of neurons; 0.06-0.07 to fill in gaps maybe?']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
    Select the input objects:CellBodies
    Name the objects to be identified:CellBodiesPlusNeurites
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:MAP2
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:RobustBackground
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
IdentifyTertiaryObjects:[module_num:15|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notes:['']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
    Select the larger identified objects:CellBodiesPlusNeurites
    Select the smaller identified objects:CellBodies
    Name the tertiary objects to be identified:Neurites
    Shrink smaller object prior to subtraction?:No

IdentifyTertiaryObjects:[module_num:16|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
    Select the larger identified objects:CellBodies
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

ConvertObjectsToImage:[module_num:17|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
    Select the input objects:CellBodiesPlusNeurites
    Name the output image:CellBodiesPlusNeuritesImage
    Select the color format:Binary (black & white)
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
MorphologicalSkeleton:[module_num:18|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
    Select the input image:CellBodiesPlusNeuritesImage
    Name the output image:CellBodiesPlusNeuritesSkel

MeasureObjectSkeleton:[module_num:19|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
    Select the seed objects:Nuclei
    Select the skeletonized image:CellBodiesPlusNeuritesSkel
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureColocalization:[module_num:20|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
    Hidden:3
    Hidden:5
    Select an image to measure:DNA
    Select an image to measure:Synapse
    Select an image to measure:MAP2
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select an object to measure:Nuclei
    Select an object to measure:CellBodies
    Select an object to measure:CellBodiesPlusNeurites
    Select an object to measure:Neurites
    Select an object to measure:Cytoplasm
    Run all metrics?:Yes
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
MeasureGranularity:[module_num:21|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
    Image count:3
    Object count:1
    Select an image to measure:DNA
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:Nuclei
    Object count:5
    Select an image to measure:MAP2
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:CellBodies
    Select objects to measure:Nuclei
    Select objects to measure:CellBodiesPlusNeurites
    Select objects to measure:Neurites
    Select objects to measure:Cytoplasm
    Object count:5
    Select an image to measure:Synapse
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16
    Select objects to measure:CellBodies
    Select objects to measure:Nuclei
    Select objects to measure:CellBodiesPlusNeurites
    Select objects to measure:Neurites
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:22|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
    Hidden:3
    Select an image to measure:DNA
    Select an image to measure:MAP2
    Select an image to measure:Synapse
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:CellBodies
    Select objects to measure:CellBodiesPlusNeurites
    Select objects to measure:Neurites

MeasureObjectNeighbors:[module_num:23|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
    Select objects to measure:CellBodiesPlusNeurites
    Select neighboring objects to measure:CellBodiesPlusNeurites
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:24|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:2
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:25|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
    Select objects to measure:CellBodiesPlusNeurites
    Select neighboring objects to measure:CellBodiesPlusNeurites
    Method to determine neighbors:Adjacent
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    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:26|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
    Hidden:3
    Hidden:5
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select an image to measure:DNA
    Select an image to measure:MAP2
    Select an image to measure:Synapse
    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:CellBodies
    Object to use as center?:These objects
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    Select objects to measure:CellBodiesPlusNeurites
    Object to use as center?:These objects
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    Select objects to measure:Neurites
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:27|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
    Select objects to measure:CellBodies
    Select objects to measure:Nuclei
    Select objects to measure:Cytoplasm
    Select objects to measure:CellBodiesPlusNeurites
    Select objects to measure:Neurites
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:28|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
    Hidden:3
    Hidden:5
    Hidden:3
    Select an image to measure:DNA
    Select an image to measure:MAP2
    Select an image to measure:Synapse
    Select objects to measure:CellBodiesPlusNeurites
    Select objects to measure:Cytoplasm
    Select objects to measure:Nuclei
    Select objects to measure:CellBodies
    Select objects to measure:Neurites
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:20
    Measure images or objects?:Both

OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Nuclei

OverlayOutlines:[module_num:30|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:CellBodiesPlusNeurites

SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>--cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ImageMath:[module_num:33|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
    Operation:None
    Raise the power of the result by:0.3
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:DNAForVis
    Image or measurement?:Image
    Select the first image:DNA
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:34|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
    Operation:None
    Raise the power of the result by:0.2
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:SynapseForVis
    Image or measurement?:Image
    Select the first image:Synapse
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
RescaleIntensity:[module_num:35|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
    Select the input image:MAP2
    Name the output image:RescaleMAP2ForVis
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:36|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
    Select the input image:SynapseForVis
    Name the output image:RescaleSynapseForVis
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:37|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
    Select the input image:DNAForVis
    Name the output image:RescaleDNAForVis
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:38|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
    Select a color scheme:RGB
    Select the image to be colored red:RescaleSynapseForVis
    Select the image to be colored green:RescaleMAP2ForVis
    Select the image to be colored blue:RescaleDNAForVis
    Name the output image:ColorImage
    Relative weight for the red image:1
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:39|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ColorImage
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:cyan
    Select objects to display:Nuclei
    Select outline color:white
    Select objects to display:Neurites

SaveImages:[module_num:40|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:OrigDNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToDatabase:[module_num:41|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enabled:False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
    Database type:MySQL / CSV
    Database name:
    Add a prefix to table names?:Yes
    Table prefix:analysis_2016_20160623_a549_48hr_
    SQL file prefix:SQL_
    Output file location:Default Output Folder|Analysis
    Create a CellProfiler Analyst properties file?:Yes
    Database host:
    Username:
    Password:
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    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object view
    Enter an image url prepend if you plan to access your files via http:http://imageweb/images/CPALinks
    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:CellOutlines,NucleiOutlines,OrigER,OrigRNA,OrigDNA,OrigMito,OrigAGP
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:384
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:No
    Properties image group count:7
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:analysis_2016_20160621_a549_48hr
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Data only
    Access CellProfiler Analyst images via URL?:Yes
    Select the classification type:Object
    Select an image to include:OrigDNA
    Use the image name for the display?:No
    Image name:DNA
    Channel color:red
    Select an image to include:OrigER
    Use the image name for the display?:No
    Image name:ER
    Channel color:green
    Select an image to include:OrigRNA
    Use the image name for the display?:No
    Image name:RNA
    Channel color:blue
    Select an image to include:OrigAGP
    Use the image name for the display?:No
    Image name:AGP
    Channel color:yellow
    Select an image to include:OrigMito
    Use the image name for the display?:No
    Image name:Mito
    Channel color:magenta
    Select an image to include:NucleiOutlines
    Use the image name for the display?:No
    Image name:Nuclei
    Channel color:none
    Select an image to include:CellOutlines
    Use the image name for the display?:No
    Image name:Cells
    Channel color:none
    Do you want to add group fields?:Yes
    Enter the name of the group:Well
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:42|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Documents/Projects/Nuron_IonChannel/Analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
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
CreateBatchFiles:[module_num:43|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:C:\Users\Administrator
    Cluster root path:C:\Users\Administrator
