CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|/Users/bcimini/Downloads
    Name of the file:load_data.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate
    Rescale intensities?:Yes

Resize:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:DownsampledDNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.2
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:3|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
    Select the input image:DownsampledDNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:4|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
    Select the input image:IllumDNA
    Name the output image:UpsampledIllumDNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:5
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:5|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
    Select the input image:OrigMAP2
    Name the output image:DownsampledMAP2
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.2
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:DownsampledMAP2
    Name the output image:IllumMAP2
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:7|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
    Select the input image:IllumMAP2
    Name the output image:UpsampledIllumMAP2
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:5
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    Interpolation method:Bilinear
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    Additional image count:0

Resize:[module_num:8|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
    Select the input image:OrigSynapse
    Name the output image:DownsampledSynapse
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.2
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    Interpolation method:Bilinear
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    Additional image count:0

CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:DownsampledSynapse
    Name the output image:IllumSynapse
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:20
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
Resize:[module_num:10|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
    Select the input image:IllumSynapse
    Name the output image:UpsampledIllumSynapse
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:5
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    Interpolation method:Bilinear
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    Additional image count:0

SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumMAP2
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumMAP2
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumSynapse
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumSynapse
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:UpsampledIllumDNA
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_IllumDNA
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    Saved file format:npy
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
CreateBatchFiles:[module_num:14|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enabled:False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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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